<CompuCell3D Revision="0" Version="4.3.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>6</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="200" y="150" z="50"/>
      <Steps>701</Steps> 
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
      <Boundary_x>Periodic</Boundary_x>
      <!-- <Boundary_y>Periodic</Boundary_y> -->
      <Boundary_z>Periodic</Boundary_z> 
      <!--<RandomSeed>167475</RandomSeed>-->
      
      
   </Potts>

    <!-- <Plugin Name="Connectivity"> -->
        <!-- <Penalty>100000</Penalty> -->
    <!-- </Plugin> -->
    
    
    <Plugin Name="MomentOfInertia"/>

   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="LC"/>
      <CellType TypeId="2" TypeName="FC"/>
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies in order of least to greatest -->
      <Energy Type1="Medium" Type2="Medium">0.0</Energy> <!--(0) leave this as is -->
      <Energy Type1="Medium" Type2="LC">2.0</Energy> <!--(2) <0.1 to 5.0> The lower this value, the more freely the Leaders can move through the medium -->
      <Energy Type1="LC" Type2="FC" id="J_LF">2.0</Energy><!-- (2) <0.1 to 5.0> This number is equal the above, so that followers stick to leaders as easily as Leaders move through the medium -->
      <Energy Type1="FC" Type2="FC">5.0</Energy><!--(5) <2.1 to 10.0> How strong followers stick together, (lower=more sticky) -->
      <Energy Type1="Medium" Type2="FC">10.0</Energy><!-- (10) <5.1 to 16.0> How easily followers move through the medium. There should be some resistance here -->
      <Energy Type1="LC" Type2="LC">16.0</Energy><!-- (16) <2.1 to 20.0> How Leaders stick together. Leaders are more interested in Followers than each other, so should at least be higher than Lc=>FC Energy -->

      <NeighborOrder>2</NeighborOrder>
   </Plugin>
   
   
   <Plugin Name="Chemotaxis">
      
      <ChemicalField Name="MV">
         <ChemotaxisByType Lambda="15" Type="LC" id="lambda_chem"/> <!-- (15) <1.0 to 30.0> This term determines how much the Leaders move toward the gradient field -->
      </ChemicalField>
   </Plugin>
   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="MV">
         <DiffusionData>
            <FieldName>MV</FieldName>
            <GlobalDiffusionConstant>0.0</GlobalDiffusionConstant>
            <GlobalDecayConstant>0</GlobalDecayConstant>
            <DiffusionCoefficient CellType="LC">0</DiffusionCoefficient>
            <DiffusionCoefficient CellType="FC">0</DiffusionCoefficient>
            <DecayCoefficient CellType="LC">0.000</DecayCoefficient>
            <DecayCoefficient CellType="FC">0.000</DecayCoefficient>
         </DiffusionData>
         <SecretionData>
            
            <Secretion Type="LC">0.0</Secretion>
            <Secretion Type="FC">0.0</Secretion>
            
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <ConstantValue PlanePosition="Min" Value="10.0"/>
               <ConstantValue PlanePosition="Max" Value="5.0"/>
               </Plane>
            <Plane Axis="Y">
               <ConstantDerivative PlanePosition="Min" Value="10.0"/>
               <ConstantDerivative PlanePosition="Max" Value="5.0"/>
               </Plane>
         </BoundaryConditions>
      </DiffusionField>
      
      
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="0" y="0" z="0"/>
         <BoxMax x="200" y="21" z="50"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>FC</Types>
      </Region>
   </Steppable>
</CompuCell3D>
